# Generated by Configurator on Wed Feb 26 20:03:50 GMT 2025

# Reset
Property,Core,Initialize,0

# Devices
Device,COM20,SerialManager,COM20
Device,COM21,SerialManager,COM21
Device,COM10,SerialManager,COM10
Device,COM18,SerialManager,COM18
Device,COM8,SerialManager,COM8
Device,MH as Cam Hub,MHCam_withgalvo,MH as Cam Hub
Device,MH Camera,MHCam_withgalvo,MH Camera
Device,Socket Galvo,MHCam_withgalvo,Socket Galvo
Device,Plugin message passer,Message_passer,Plugin message passer
Device,Blackfly S BFS-U3-51S5P,SpinnakerCamera,Blackfly S BFS-U3-51S5P
Device,GenericSLM,GenericSLM,GenericSLM
Device,Ultimeyes Hydra Hub,UltimeyesHydra,Ultimeyes Hydra Hub
Device,Ultimeyes Hydra Dual Axis Stage,UltimeyesHydra,Ultimeyes Hydra Dual Axis Stage
Device,Ultimeyes Hydra Hub-1,UltimeyesHydra,Ultimeyes Hydra Hub
Device,Ultimeyes Hydra Single Axis Stage,UltimeyesHydra,Ultimeyes Hydra Single Axis Stage
Device,AAAOTF,AAAOTF,AAAOTF
Device,Ultimeyes Hydra Hub-2,UltimeyesHydra,Ultimeyes Hydra Hub
Device,New slider top,UltimeyesHydra,Ultimeyes Hydra State Device
Device,Optospin Controller,Cairn_Optospin,Optospin Controller
Device,Breadboard filter wheel,Cairn_Optospin,Filter wheel 1
Device,Old slider,Cairn_openFrame_slider,Cairn openFrame slider
Device,Bartels QuadKey,Bartels_QuadKey,Bartels QuadKey
Device,cairn box,Arduino,Arduino-Hub
Device,cairn box switch,Arduino,Arduino-Switch
Device,cairn box shutter,Arduino,Arduino-Shutter
Device,PMT shutter,Arduino,Arduino-Hub
Device,PMT shutter switch,Arduino,Arduino-Switch
Device,Arduino-Shutter,Arduino,Arduino-Shutter
Device,NDD Filter Wheel,ThorlabsFilterWheel,Thorlabs Filter Wheel
Device,CellCam,CellCam,CellCam

# Pre-init settings for devices
Property,COM20,AnswerTimeout,500.0000
Property,COM20,BaudRate,57600
Property,COM20,DTR,Disable
Property,COM20,DataBits,8
Property,COM20,DelayBetweenCharsMs,0.0000
Property,COM20,Fast USB to Serial,Disable
Property,COM20,Handshaking,Off
Property,COM20,Parity,None
Property,COM20,StopBits,1
Property,COM20,Verbose,0
Property,COM21,AnswerTimeout,500.0000
Property,COM21,BaudRate,57600
Property,COM21,DTR,Disable
Property,COM21,DataBits,8
Property,COM21,DelayBetweenCharsMs,0.0000
Property,COM21,Fast USB to Serial,Disable
Property,COM21,Handshaking,Off
Property,COM21,Parity,None
Property,COM21,StopBits,1
Property,COM21,Verbose,1
Property,COM10,AnswerTimeout,500.0000
Property,COM10,BaudRate,57600
Property,COM10,DTR,Disable
Property,COM10,DataBits,8
Property,COM10,DelayBetweenCharsMs,0.0000
Property,COM10,Fast USB to Serial,Disable
Property,COM10,Handshaking,Off
Property,COM10,Parity,None
Property,COM10,StopBits,1
Property,COM10,Verbose,0
Property,COM18,AnswerTimeout,500.0000
Property,COM18,BaudRate,115200
Property,COM18,DTR,Disable
Property,COM18,DataBits,8
Property,COM18,DelayBetweenCharsMs,0.0000
Property,COM18,Fast USB to Serial,Disable
Property,COM18,Handshaking,Off
Property,COM18,Parity,None
Property,COM18,StopBits,1
Property,COM18,Verbose,0
Property,COM8,AnswerTimeout,500.0000
Property,COM8,BaudRate,9600
Property,COM8,DTR,Disable
Property,COM8,DataBits,8
Property,COM8,DelayBetweenCharsMs,0.0000
Property,COM8,Fast USB to Serial,Disable
Property,COM8,Handshaking,Off
Property,COM8,Parity,None
Property,COM8,StopBits,1
Property,COM8,Verbose,0
Property,MH Camera,MaximumExposureMs,100000.0000
Property,Blackfly S BFS-U3-51S5P,Serial Number,23478922
Property,GenericSLM,GraphicsPort,\\.\DISPLAY3
Property,GenericSLM,TestModeHeight,1200
Property,GenericSLM,TestModeWidth,1920
Property,Ultimeyes Hydra Hub,Ethernet Port,400
Property,Ultimeyes Hydra Hub,IP Address,192.168.1.200
Property,Ultimeyes Hydra Hub,Port,Undefined
Property,Ultimeyes Hydra Hub,Port Type,Ethernet
Property,Ultimeyes Hydra Dual Axis Stage,Axis Index 1,1
Property,Ultimeyes Hydra Dual Axis Stage,Axis Index 2,2
Property,Ultimeyes Hydra Dual Axis Stage,Stage Type,Encoded
Property,Ultimeyes Hydra Hub-1,Ethernet Port,400
Property,Ultimeyes Hydra Hub-1,IP Address,192.168.1.201
Property,Ultimeyes Hydra Hub-1,Port,Undefined
Property,Ultimeyes Hydra Hub-1,Port Type,Ethernet
Property,Ultimeyes Hydra Single Axis Stage,Axis Index 1,1
Property,Ultimeyes Hydra Single Axis Stage,Stage Type,Encoded
Property,AAAOTF,Port,COM21
Property,Ultimeyes Hydra Hub-2,Ethernet Port,400
Property,Ultimeyes Hydra Hub-2,IP Address,192.168.1.202
Property,Ultimeyes Hydra Hub-2,Port,Undefined
Property,Ultimeyes Hydra Hub-2,Port Type,Ethernet
Property,New slider top,Command Chain Index,9
Property,New slider top,Number of States,3
Property,Optospin Controller,Optospin serial number,9792
Property,Breadboard filter wheel,Wheel Mode,Independent mode
Property,Old slider,Port,COM13
Property,Bartels QuadKey,Port,COM8
Property,cairn box,Logic,Normal
Property,cairn box,Port,COM10
Property,PMT shutter,Logic,Normal
Property,PMT shutter,Port,COM20
Property,NDD Filter Wheel,Port,COM18
Property,CellCam,Camera ID,CC210618134107492B3C0FDF7A031BE

# Pre-init settings for COM ports

# Hub (parent) references
Parent,MH Camera,MH as Cam Hub
Parent,Socket Galvo,MH as Cam Hub
Parent,Ultimeyes Hydra Dual Axis Stage,Ultimeyes Hydra Hub
Parent,Ultimeyes Hydra Single Axis Stage,Ultimeyes Hydra Hub-1
Parent,New slider top,Ultimeyes Hydra Hub-2
Parent,Breadboard filter wheel,Optospin Controller
Parent,cairn box switch,cairn box
Parent,cairn box shutter,cairn box
Parent,PMT shutter switch,PMT shutter
Parent,Arduino-Shutter,PMT shutter

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions
FocusDirection,Ultimeyes Hydra Single Axis Stage,0

# Roles
Property,Core,Camera,MH Camera
Property,Core,Shutter,AAAOTF
Property,Core,Focus,Ultimeyes Hydra Single Axis Stage
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# New slider top
Label,New slider top,2,State-3
Label,New slider top,1,State-2
Label,New slider top,0,State-1
# Breadboard filter wheel
Label,Breadboard filter wheel,5,Filter-6
Label,Breadboard filter wheel,4,Filter-5
Label,Breadboard filter wheel,3,Filter-4
Label,Breadboard filter wheel,2,Filter-3
Label,Breadboard filter wheel,1,Filter-2
Label,Breadboard filter wheel,0,Filter-1
# cairn box switch
Label,cairn box switch,63,63
Label,cairn box switch,62,62
Label,cairn box switch,61,61
Label,cairn box switch,60,60
Label,cairn box switch,59,59
Label,cairn box switch,58,58
Label,cairn box switch,57,57
Label,cairn box switch,56,56
Label,cairn box switch,55,55
Label,cairn box switch,54,54
Label,cairn box switch,53,53
Label,cairn box switch,52,52
Label,cairn box switch,51,51
Label,cairn box switch,50,50
Label,cairn box switch,49,49
Label,cairn box switch,48,48
Label,cairn box switch,47,47
Label,cairn box switch,46,46
Label,cairn box switch,45,45
Label,cairn box switch,44,44
Label,cairn box switch,43,43
Label,cairn box switch,42,42
Label,cairn box switch,41,41
Label,cairn box switch,40,40
Label,cairn box switch,39,39
Label,cairn box switch,38,38
Label,cairn box switch,37,37
Label,cairn box switch,36,36
Label,cairn box switch,35,35
Label,cairn box switch,34,34
Label,cairn box switch,33,33
Label,cairn box switch,32,32
Label,cairn box switch,31,31
Label,cairn box switch,30,30
Label,cairn box switch,29,29
Label,cairn box switch,28,28
Label,cairn box switch,27,27
Label,cairn box switch,26,26
Label,cairn box switch,25,25
Label,cairn box switch,24,24
Label,cairn box switch,23,23
Label,cairn box switch,22,22
Label,cairn box switch,21,21
Label,cairn box switch,20,20
Label,cairn box switch,19,19
Label,cairn box switch,18,18
Label,cairn box switch,17,17
Label,cairn box switch,16,16
Label,cairn box switch,15,15
Label,cairn box switch,14,14
Label,cairn box switch,13,13
Label,cairn box switch,12,12
Label,cairn box switch,11,11
Label,cairn box switch,10,10
Label,cairn box switch,9,9
Label,cairn box switch,8,8
Label,cairn box switch,7,7
Label,cairn box switch,6,6
Label,cairn box switch,5,5
Label,cairn box switch,4,4
Label,cairn box switch,3,3
Label,cairn box switch,2,2
Label,cairn box switch,1,1
Label,cairn box switch,0,0
# PMT shutter switch
Label,PMT shutter switch,63,63
Label,PMT shutter switch,62,62
Label,PMT shutter switch,61,61
Label,PMT shutter switch,60,60
Label,PMT shutter switch,59,59
Label,PMT shutter switch,58,58
Label,PMT shutter switch,57,57
Label,PMT shutter switch,56,56
Label,PMT shutter switch,55,55
Label,PMT shutter switch,54,54
Label,PMT shutter switch,53,53
Label,PMT shutter switch,52,52
Label,PMT shutter switch,51,51
Label,PMT shutter switch,50,50
Label,PMT shutter switch,49,49
Label,PMT shutter switch,48,48
Label,PMT shutter switch,47,47
Label,PMT shutter switch,46,46
Label,PMT shutter switch,45,45
Label,PMT shutter switch,44,44
Label,PMT shutter switch,43,43
Label,PMT shutter switch,42,42
Label,PMT shutter switch,41,41
Label,PMT shutter switch,40,40
Label,PMT shutter switch,39,39
Label,PMT shutter switch,38,38
Label,PMT shutter switch,37,37
Label,PMT shutter switch,36,36
Label,PMT shutter switch,35,35
Label,PMT shutter switch,34,34
Label,PMT shutter switch,33,33
Label,PMT shutter switch,32,32
Label,PMT shutter switch,31,31
Label,PMT shutter switch,30,30
Label,PMT shutter switch,29,29
Label,PMT shutter switch,28,28
Label,PMT shutter switch,27,27
Label,PMT shutter switch,26,26
Label,PMT shutter switch,25,25
Label,PMT shutter switch,24,24
Label,PMT shutter switch,23,23
Label,PMT shutter switch,22,22
Label,PMT shutter switch,21,21
Label,PMT shutter switch,20,20
Label,PMT shutter switch,19,19
Label,PMT shutter switch,18,18
Label,PMT shutter switch,17,17
Label,PMT shutter switch,16,16
Label,PMT shutter switch,15,15
Label,PMT shutter switch,14,14
Label,PMT shutter switch,13,13
Label,PMT shutter switch,12,12
Label,PMT shutter switch,11,11
Label,PMT shutter switch,10,10
Label,PMT shutter switch,9,9
Label,PMT shutter switch,8,8
Label,PMT shutter switch,7,7
Label,PMT shutter switch,6,6
Label,PMT shutter switch,5,5
Label,PMT shutter switch,4,4
Label,PMT shutter switch,3,3
Label,PMT shutter switch,2,2
Label,PMT shutter switch,1,1
Label,PMT shutter switch,0,0
# NDD Filter Wheel
Label,NDD Filter Wheel,5,Filter-6
Label,NDD Filter Wheel,4,Filter-5
Label,NDD Filter Wheel,3,Filter-4
Label,NDD Filter Wheel,2,Filter-3
Label,NDD Filter Wheel,1,Filter-2
Label,NDD Filter Wheel,0,Filter-1

# Configuration presets
# Group: AOM freq
# Preset: NewPreset
ConfigGroup,AOM freq,NewPreset,AAAOTF,Frequency (MHz),115.3200


# Group: MH Exposure
# Preset: NewPreset
ConfigGroup,MH Exposure,NewPreset,MH Camera,Exposure,250.0000


# Group: System
# Preset: Startup
ConfigGroup,System,Startup,Bartels QuadKey,Continuous,Continuous
ConfigGroup,System,Startup,cairn box switch,State,63
ConfigGroup,System,Startup,cairn box shutter,OnOff,0
ConfigGroup,System,Startup,PMT shutter switch,Label,63
ConfigGroup,System,Startup,Arduino-Shutter,OnOff,1
ConfigGroup,System,Startup,MH Camera,Decay or rates,Rates
ConfigGroup,System,Startup,MH Camera,Mode,MH Image
ConfigGroup,System,Startup,Ultimeyes Hydra Dual Axis Stage,TransposeMirrorY,1


# Group: MH Status
# Preset: Running
ConfigGroup,MH Status,Running,MH Camera,MultiHarp Status,Running

# Preset: Idle
ConfigGroup,MH Status,Idle,MH Camera,MultiHarp Status,Idle

# Preset: Start
ConfigGroup,MH Status,Start,MH Camera,MultiHarp Status,Start

# Preset: Abort
ConfigGroup,MH Status,Abort,MH Camera,MultiHarp Status,Abort


# Group: PMT shutters
# Preset: Open
ConfigGroup,PMT shutters,Open,PMT shutter switch,State,63
ConfigGroup,PMT shutters,Open,Arduino-Shutter,OnOff,0

# Preset: Closed
ConfigGroup,PMT shutters,Closed,PMT shutter switch,State,63
ConfigGroup,PMT shutters,Closed,Arduino-Shutter,OnOff,1


# Group: Current Camera
# Preset: CellCam
ConfigGroup,Current Camera,CellCam,Core,Camera,CellCam

# Preset: MH Camera
ConfigGroup,Current Camera,MH Camera,Core,Camera,MH Camera

# Preset: Blackfly S BFS-U3-51S5P
ConfigGroup,Current Camera,Blackfly S BFS-U3-51S5P,Core,Camera,Blackfly S BFS-U3-51S5P


# Group: BF/multiphoton
# Preset: CoolLED
ConfigGroup,BF/multiphoton,CoolLED,AAAOTF,State,0
ConfigGroup,BF/multiphoton,CoolLED,New slider top,State,1
ConfigGroup,BF/multiphoton,CoolLED,cairn box shutter,OnOff,0
ConfigGroup,BF/multiphoton,CoolLED,Arduino-Shutter,OnOff,1
ConfigGroup,BF/multiphoton,CoolLED,Core,Camera,CellCam

# Preset: BF
ConfigGroup,BF/multiphoton,BF,AAAOTF,State,0
ConfigGroup,BF/multiphoton,BF,New slider top,State,2
ConfigGroup,BF/multiphoton,BF,cairn box shutter,OnOff,1
ConfigGroup,BF/multiphoton,BF,Arduino-Shutter,OnOff,1
ConfigGroup,BF/multiphoton,BF,Core,Camera,CellCam

# Preset: MM
ConfigGroup,BF/multiphoton,MM,AAAOTF,State,1
ConfigGroup,BF/multiphoton,MM,New slider top,State,2
ConfigGroup,BF/multiphoton,MM,cairn box shutter,OnOff,0
ConfigGroup,BF/multiphoton,MM,Core,Camera,MH Camera
ConfigGroup,BF/multiphoton,MM,Arduino-Shutter,OnOff,1


# Group: Multibeam emission filter
# Preset: Filter-6
ConfigGroup,Multibeam emission filter,Filter-6,Breadboard filter wheel,Label,Filter-6

# Preset: Filter-5
ConfigGroup,Multibeam emission filter,Filter-5,Breadboard filter wheel,Label,Filter-5

# Preset: Filter-4
ConfigGroup,Multibeam emission filter,Filter-4,Breadboard filter wheel,Label,Filter-4

# Preset: Filter-3
ConfigGroup,Multibeam emission filter,Filter-3,Breadboard filter wheel,Label,Filter-3

# Preset: Filter-2
ConfigGroup,Multibeam emission filter,Filter-2,Breadboard filter wheel,Label,Filter-2

# Preset: Filter-1
ConfigGroup,Multibeam emission filter,Filter-1,Breadboard filter wheel,Label,Filter-1


# Group: Excitation Slider (Level 2)
# Preset: NewPreset
ConfigGroup,Excitation Slider (Level 2),NewPreset,New slider top,State,2


# Group: Pump
# Preset: Start Pump 1
ConfigGroup,Pump,Start Pump 1,Bartels QuadKey,Dispensing,Start Pump 1

# Preset: Idle
ConfigGroup,Pump,Idle,Bartels QuadKey,Dispensing,Idle

# Preset: Abort
ConfigGroup,Pump,Abort,Bartels QuadKey,Dispensing,Abort

# Preset: Start Pump 4
ConfigGroup,Pump,Start Pump 4,Bartels QuadKey,Dispensing,Start Pump 4

# Preset: Start Pump 3
ConfigGroup,Pump,Start Pump 3,Bartels QuadKey,Dispensing,Start Pump 3

# Preset: Start Pump 2
ConfigGroup,Pump,Start Pump 2,Bartels QuadKey,Dispensing,Start Pump 2


# Group: Brightfield (MonoLED)
# Preset: 1
ConfigGroup,Brightfield (MonoLED),1,cairn box shutter,OnOff,1

# Preset: 0
ConfigGroup,Brightfield (MonoLED),0,cairn box shutter,OnOff,0


# Group: AS
# Preset: 1
ConfigGroup,AS,1,Core,AutoShutter,1

# Preset: 0
ConfigGroup,AS,0,Core,AutoShutter,0


# Group: MH Saving
# Preset: False
ConfigGroup,MH Saving,False,MH Camera,MultiHarp Save enable,False

# Preset: True
ConfigGroup,MH Saving,True,MH Camera,MultiHarp Save enable,True


# Group: Laser Power/ dB
# Preset: NewPreset
ConfigGroup,Laser Power/ dB,NewPreset,AAAOTF,Maximum intensity (dB),2243



# PixelSize settings

